'<ADbasic Header, Headerversion 001.001>
' Process_Number                 = 1
' Initial_Processdelay           = 3000
' Eventsource                    = Timer
' Control_long_Delays_for_Stop   = No
' Priority                       = High
' Version                        = 1
' ADbasic_Version                = 6.2.0
' Optimize                       = Yes
' Optimize_Level                 = 1
' Stacksize                      = 1000
' Info_Last_Save                 = DDM05334  EMPA\Lab405
'<Header End>
'<ADbasic Header, Headerversion 001.001>
' Process_Number                 = 1
' Initial_Processdelay           = 1000
' Eventsource                    = Timer
' Control_long_Delays_for_Stop   = No
' Priority                       = High
' Version                        = 1
' ADbasic_Version                = 6.2.0
' Optimize                       = Yes
' Optimize_Level                 = 1
' Stacksize                      = 1000
' Info_Last_Save                 = DDM05754  EMPA\lab405
'<Header End>
' AO1_read_AI_18b.bas: ramps voltage on AO1, recording voltage on AI 1-4

'Inputs general:
'PAR_1 = Gain DAC 1
'PAR_2 = Gain DAC 2
'PAR_3 = Gain DAC 3
'PAR_4 = Gain DAC 4
'PAR_5 = Address AIN F4/18
'PAR_6 = Address AOUT 4/16
'PAR_7 = Address DIO-32
'PAR_8 = voltage sweep output channel
'PAR_10 = ADC resolution

'Measurement parameters:
'FPAR_1 = actual AI2 value in bin
'FPAR_2 = actual AI3 value in bin
'FPAR_3 = actual AI4 value in bin
'FPAR_4 = actual AI5 value in bin

'Inputs:
'PAR_21 = no of points to average over
'PAR_22 = no of loops to wait before measure
'PAR_23 = length of voltage array
'PAR_24 = actual counter

'DATA_1 = AO1 voltage values array (maximum length 1048576, so 4 arrays can be handled in parallel)

'Outputs:
'DATA_2 = averaged AI1 bin array 
'DATA_3 = averaged AI2 bin array 
'DATA_4 = averaged AI3 bin array 
'DATA_5 = averaged AI4 bin array 
'DATA_6 = read ADC values

#INCLUDE ADwinGoldII.inc

DIM DATA_1[10000] as long     'voltage input  
DIM DATA_2[10000] as float    'ADC1
DIM DATA_3[10000] as long    'ADC1
DIM DATA_4[10000] as long    'ADC1
DIM DATA_5[10000] as long    'ADC1

DIM measureflag as long
DIM totalcurrent1 as float
DIM avgcounter,waitcounter,voltagecounter as long
DIM actual_V as long
DIM bin1, bin2 as long
DIM IV1_bit0, IV1_bit1, IV1_bit2, IV1_bit3, IV1_bit0_old, IV1_bit1_old, IV1_bit2_old as long
DIM output_min, output_max, bin_size as float
DIM IV_gain1, tmp as float

INIT:
  measureflag = 0 'to start measurement directly after start voltage is reached, then increase output 
  avgcounter = 0
  waitcounter = 0
  voltagecounter = 1
  actual_V = DATA_1[1]
  
  'convert bin to V
  output_min = -10
  output_max = 9.99969
  bin_size = (output_max-output_min) / (2^PAR_10)
  
  'ADC gains
  Set_Mux1(00000b) 'set MUX1
  Set_Mux2(00000b) 'set MUX2
  
  'set DAC to first value
  DAC(PAR_8, actual_V)
  
  'set IV gain
  IV_gain1 = 10^(-1*FPAR_27)
  
  IF (FPAR_27 = -200) THEN
    'set DIO input and outputs. 0-15 as inputs, 16-31 as outputs; 0=input, 1=output
    Conf_DIO(0000b)
    IV1_bit0 = Digin(0)           ' get IV gains 
    IV1_bit1 = Digin(1)           ' get IV gains 
    IV1_bit2 = Digin(2)           ' get IV gains  
    
    IV_gain1 = (IV1_bit2 * 4) + (IV1_bit1 * 2) + IV1_bit0 - 12 
    
    tmp = 10^IV_gain1
    IV_gain1 = tmp
    
  ENDIF
      
  ' start first convolution on ADC
  START_CONV(11b)
  Wait_EOC(11b)  
  
  
EVENT:

  SELECTCASE measureflag 'measurement: 0 = ramp to next voltage point ; 1 = wait ; 2 = measure ; 3 = wait for autoranging
  
    CASE 0 'output desired voltage on DAC1
      IF(DATA_1[voltagecounter] > actual_V) THEN INC(actual_V)      
      IF(DATA_1[voltagecounter] < actual_V) THEN DEC(actual_V) 
      IF  (actual_V = (DATA_1[voltagecounter])) THEN 
        measureflag = 1 
      ENDIF
      IF (voltagecounter <= PAR_23) THEN 
        DAC(PAR_8, actual_V)
      ENDIF
      
    CASE 1 
      IF(waitcounter = PAR_22) THEN
        measureflag = 2
        waitcounter = 0
        avgcounter = 0
        totalcurrent1 = 0
      ELSE
        waitcounter = waitcounter + 1
      ENDIF
        
    CASE 2
      'read ADC
      WAIT_EOC(11b)
      bin1 = READ_ADC24(1)/64
      START_CONV(11b)
      
      ' get gain if needed
      IF ( FPAR_27 = -200 ) THEN             
        IV1_bit0 = Digin(0)           ' get IV gains 
        IV1_bit1 = Digin(1)           ' get IV gains 
        IV1_bit2 = Digin(2)           ' get IV gains  
      ELSE
        IV1_bit0 = 0
        IV1_bit1 = 0
        IV1_bit2 = 0
      ENDIF
            
      ' If gain changed, go to autoranging wait loop
      IF (((IV1_bit0<>IV1_bit0_old) OR (IV1_bit1<>IV1_bit1_old)) OR (IV1_bit2<>IV1_bit2_old)) THEN
        measureflag = 3
        waitcounter = 0
        IV1_bit0_old = IV1_bit0
        IV1_bit1_old = IV1_bit1
        IV1_bit2_old = IV1_bit2
      ENDIF
         
      ' calculate current if necessary
      totalcurrent1 = totalcurrent1 + ((output_min + (bin1 * bin_size / 2^PAR_1)) * IV_gain1)
                    
      avgcounter = avgcounter + 1
                
      ' get averaging if necessary
      IF(avgcounter = PAR_21) THEN
        FPAR_1 = totalcurrent1 / PAR_21
        DATA_2[voltagecounter] = FPAR_1
                  
        measureflag = 0
        voltagecounter = voltagecounter + 1
        PAR_25 = voltagecounter
      ENDIF
          
      ' stop when reached end of vector
      IF (voltagecounter  = PAR_23 + 1) THEN   
        end  
      ENDIF
          
    CASE 3 ' wait for autoranging settling time
      IF(waitcounter = PAR_26) THEN
        measureflag = 2
        waitcounter = 0
        avgcounter = 0
        totalcurrent1 = 0
        
        ' calculate new gains
        IV_gain1 = (IV1_bit2 * 4) + (IV1_bit1 * 2) + IV1_bit0 - 12 
                       
        tmp = 10^IV_gain1
        IV_gain1 = tmp
        FPAR_15 = IV_gain1
                        
      ELSE
        waitcounter = waitcounter + 1
      ENDIF
    
  ENDSELECT
  
FINISH:
  DAC(PAR_8, DATA_1[PAR_23])
