'<ADbasic Header, Headerversion 001.001>
' Process_Number                 = 6
' Initial_Processdelay           = 3000
' Eventsource                    = Timer
' Control_long_Delays_for_Stop   = No
' Priority                       = High
' Version                        = 1
' ADbasic_Version                = 6.3.0
' Optimize                       = Yes
' Optimize_Level                 = 1
' Stacksize                      = 1000
' Info_Last_Save                 = DDM05364  EMPA\lab405
'<Header End>
' AO1_read_AI_18b.bas: ramps voltage on AO1, recording voltage on AI 1-4

'Inputs general:
'PAR_1 = Gain DAC 1
'PAR_2 = Gain DAC 2
'PAR_3 = Gain DAC 3
'PAR_4 = Gain DAC 4
'PAR_5 = Address AIN F4/18
'PAR_6 = Address AOUT 4/16
'PAR_7 = Address DIO-32
'PAR_8 = voltage sweep output channel
'PAR_10 = ADC resolution

'Measurement parameters:
'FPAR_1 = actual AI2 value in bin
'FPAR_2 = actual AI3 value in bin
'FPAR_3 = actual AI4 value in bin
'FPAR_4 = actual AI5 value in bin

'Inputs:
'PAR_21 = no of points to average over
'PAR_22 = no of loops to wait before measure
'PAR_23 = length of voltage array
'PAR_24 = actual counter

'DATA_1 = AO1 voltage values array (maximum length 1048576, so 4 arrays can be handled in parallel)

'Outputs:
'DATA_2 = averaged AI1 bin array 
'DATA_3 = averaged AI2 bin array 
'DATA_4 = averaged AI3 bin array 
'DATA_5 = averaged AI4 bin array 
'DATA_6 = read ADC values

#INCLUDE ADwinGoldII.inc
'#INCLUDE C:\Users\lab405\Desktop\Lakeshore-ADwin-GoldII\Matlab\ADwin_script\Additional_functions.Inc

DIM DATA_1[200000] as long     'voltage input  


DIM actual_V as long
DIM voltagecounter as long

INIT:
  voltagecounter = 1
  actual_V = DATA_1[1]
  
  'set DAC to first value
  DAC(PAR_8, actual_V)
  
EVENT:

  PAR_24 = actual_V   
  PAR_25 = voltagecounter
  IF (voltagecounter <= PAR_23) THEN 
    DAC(PAR_8, DATA_1[voltagecounter])
  ELSE
    end
  ENDIF
  
  voltagecounter = voltagecounter + 1
  
FINISH:
  DAC(PAR_8, DATA_1[PAR_23])
